# Bifurcation analysis of the full PKC model

#  Initial conditions for the steady state, R=0, L=0, D = 0, Q = 0, p=0

init R1=1
init R2=1
init c=0.0805296
init ct=3.861011
init h=0.70395
init p=0

## Parameter values

param Vplc=0
param Kplc=0.11
param Vpm=0.07

param Vpkc=0.1
param sw = 1

# P2Y1

param A1=0.5

param K1=0.05
param K3=20
param k12=0.5
param k_12=0.05
param k14=0.05
param k_14=0.5

# P2Y2/4

param A2=0.5

param K2=0.05
param K4=20;
param k22=0.5
param k_22=0.05
param k24=0.05
param k_24=0.5

param gamma=5.5
param delta=0

param Kc=0.2
param Kp=0.3
param Kf=40
param Kb=0.4
param Kh=0.1
param tau_max=200
param Ktau=0.09

param Kpkc=0.3

param Vs=0.9
param Kbar=1.5e-5
param Ks=0.2
param alpha0=0.003
param alpha1=0.01
param Kce=14

param Kpm=0.3

param L_t=0.8
param kL=0.5
param k_L=0.008
param k_r=0.167
param Q_t1=0.887
param Q_t2=1.087
param kmin=0.1
param k_i=2

param sigma1=1
param sigma2=0.1
param omega1=1
param omega2=0.8

param tau_c=2
param in=1

param sig_plc=10

param V5p=0.66
param V3k=0.1
param K3k=0.4
 
## Functions of the model

alpha0_til=delta*alpha0
alpha1_til=delta*alpha1

rho1_d=k14/(1+K3)+k_12/(1+(1/K3))
rho1_p=k_14*K1/(K1+A1)+k12*A1/(K1+A1)

rho2_d=k24/(1+K4)+k_22/(1+(1/K4))
rho2_p=k_24*K2/(K2+A2)+k22*A2/(K2+A2)

ce=gamma*(ct-c)

kr=(R1*A1/(K1+A1)+R2*A2/(K2+A2))*Vplc*(sig_plc*alpha0_til+(c^2/(c^2+Kplc^2)))

L=kr*L_t/(kr+k_r)
D=kL*L/k_L

Jin = alpha0_til+alpha1_til*(Kce^4/(Kce^4+ce^4))
kplus1=in*(Vpkc*D*alpha1_til*Kce^4/(Kce^4+ce^4))
kplus2=Vpkc*D*c^2/(c^2+Kpkc^2)
Q1=kplus1*Q_t1/(kplus1+kmin)
Q2=kplus2*Q_t2/(kplus2+kmin)

Q_tilde_1 = sigma1*Q1+omega1*Q2
Q_tilde_2 = sigma2*Q1+omega2*Q2

Kp_tilde=Kp*(1-sw*Q2)

phi_c=c^4/(c^4+Kc^4)
phi_p=p^2/(Kp_tilde^2+p^2)
phi_p_down=Kp_tilde^2/(Kp_tilde^2+p^2)
h_inf=Kh^4/(Kh^4+c^4)
tau = tau_max*Ktau^4/(Ktau^4+c^4)

beta = phi_p*phi_c*h
alpha = phi_p_down*(1-phi_c*h_inf)

Po=beta/(beta + Kb*(beta+alpha))

nu_deg = (Q1+1)*(V5p+V3k*c^2/(c^2+K3K^2))

Jipr=Kf*Po*(ce-c)
Jpm = delta*Vpm*c^2/(Kpm^2+c^2)
Jserca=Vs*(c^2-Kbar*ce^2)/(c^2+Ks^2)

## Functions of interest

aux IPR = Jipr
aux PKC1 = Q1
aux PKC2 = Q2

## Differential Equations

dc/dt=(Jipr-Jserca+Jin-Jpm)/tau_c
dct/dt=Jin-Jpm
dh/dt=(h_inf-h)/tau
dp/dt=kL*L-nu_deg*p
dR1/dt=(1-R1)*rho1_d-R1*Q_tilde_1*rho1_p
dR2/dt=(1-R2)*rho2_d-R2*Q_tilde_2*rho2_p

# Continuation parameters

@ total=400,dt=0.05,xp=t,yp=c,xlo=0,xhi=400,ylo=0,yhi=0.6,meth=gear,bounds=1000
@ ntst=500,dsmin=0.0001,ds=0.001,dsmax=0.01,parmax=10
@ nmax=100000, npr=10000
@ autoxmin=0,autoxmax=10,autoymin=0,autoymax=2

done
